PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '', 'session': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -0.4039, -0.4039, -0.4039
  expName = pilotv2
  keyboardBackend = ioHub
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Routines
  Routine stim
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    ImageComponent image
      image [set every repeat] = $stimfile
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [frame N] = 15
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    PolygonComponent fixCrossR_2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [frame N] = 15
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  Routine Intro
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = The experiment will begin soon. Get ready!
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    CodeComponent code
      Code Type = Py
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      End Routine:
        win.winHandle.activate()
    KeyboardComponent key_resp_5
      allowedKeys = '5'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine delay
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    PolygonComponent fixCrossR_4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [frame N] = 15
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  Routine response
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    PolygonComponent fixCross
      fillColor [set every repeat] = black
      lineColor [set every repeat] = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3
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    TextComponent text1
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.5, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp1
      units = norm
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    TextComponent text2
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.1666, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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      text [set every repeat]:
        $resp2
    TextComponent text3
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.166, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp3
      units = norm
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    TextComponent text4
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.5, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      units = norm
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      text [set every repeat]:
        $resp4
    TextComponent text5
      color [set every repeat] = white
      letterHeight = 0.05
      pos = -.5, -.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp5
      units = norm
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    TextComponent text6
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (-.1666, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp6
      units = norm
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    TextComponent text7
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.1666, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp7
      units = norm
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    TextComponent text8
      color [set every repeat] = white
      letterHeight = 0.05
      pos = (.5,-.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = $resp8
      units = norm
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    KeyboardComponent kb
      allowedKeys = '1','2','3','4'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      store = first key
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    TextComponent num1
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (-.5, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = 1
      units = norm
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    TextComponent num2
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (-.1666, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = 2
      units = norm
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    TextComponent num3
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (.1666, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = 3
      units = norm
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    TextComponent num4
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (.5, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every repeat] = 4
      units = norm
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    CodeComponent changecolour
      Code Type = Py
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      Begin Experiment:
        response_map = {
            '1': [text1, text5, num1],
            '2': [text2, text6, num2],
            '3': [text3, text7, num3],
            '4': [text4, text8, num4],  # Add more entries as needed for additional text components
        }
      Begin Routine:
        key_pressed = False  # Initialize the flag as False
        event.clearEvents(eventType='keyboard')  # Clear keyboard events
      Each Frame:
        if not key_pressed:
            keys = event.getKeys(keyList=['1', '2', '3', '4'])
            if keys:
                key_pressed = True
                for key, response_components in response_map.items():
                    if key in keys:
                        fixCross.setColor([1, 0, 1], 'rgb')  # Set the color of the fixCross
                        for component in response_components:
                            component.setColor([1, 0, 1], 'rgb')  # Set the color of each text component
      End Routine:
        fixCross.setColor([0, 0, 0], 'rgb')  # Set to black
  Routine ITI
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    PolygonComponent fixCrossR
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $interval
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    TextComponent text_total
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    TextComponent text_acc
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.2
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        # Update text stimuli with the current values
        text_total.setText(f"Total: {total}")
        text_acc.setText(f"Accuracy: {accuracy}")
  Routine taskcue
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    ImageComponent cue
      image [set every repeat] = $taskCue
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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  Routine welcome
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    TextComponent welcometext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000000
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      text:
        Welcome!

        This program will guide you through the task. Please read each page carefully and ask the experimenter if you have any questions.


        Please press the space bar to go to the next page.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr2
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 100000
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      text:
        The images you will see are similar to the image below.






        You will be asked to choose either what the object in the image is, or which way the object is facing, depending on the symbol that is shown to you before each image.


        Press space to continue
    ImageComponent image_2
      image = stim/car2.png
      pos = (0, .18)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000000000000
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  Routine symb1
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image = stim/obj1.png
      pos = (-.1, .25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_4
      image = stim/obj2.png
      pos = (.1, .25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_5
      image = stim/car2.png
      pos = (-.33,-.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_6
      image = stim/turtle3.png
      pos = (-.11,-.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_22
      image = stim/shoe4.png
      pos = (.11,-.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_23
      image = stim/horse1.png
      pos = (.33,-.05)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        If you are shown one of these two symbols,




        You are asked to choose what the object is, for example:




         Car        Turtle       Shoe       Horse


        Press space to continue
  Routine symb2
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    ImageComponent image_7
      image = stim/ori1.png
      pos = (-.1, .25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_8
      image = stim/ori2.png
      pos = (.1, .25)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_9
      image = stim/car1.png
      pos = (-.4,-.06)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_10
      image = stim/car2.png
      pos = (-.15,-.06)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_11
      image = stim/car3.png
      pos = (.13,-.06)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_12
      image = stim/car4.png
      pos = (.39,-.06)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Or, if you see one of these two symbols,



        You are asked to select which way the object is facing.




        full left       slight left      slight right     full right

        Press space to continue
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine memor
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Please spend a few moments memorizing which symbol corresponds to which question.









        Press space to continue
    ImageComponent image_13
      image = stim/obj1.png
      pos = (-.45, .06)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_14
      image = stim/obj2.png
      pos = (-.25, .06)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_15
      image = stim/ori1.png
      pos = (.25, .06)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    ImageComponent image_16
      image = stim/ori2.png
      pos = (.45, .06)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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    TextComponent text_6
      letterHeight = 0.05
      pos = (-.4, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text =   Which object was it?
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    TextComponent text_7
      letterHeight = 0.05
      pos = (.4, -.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = Which way was it facing?
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  Routine test1
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    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Please click on the correct option





        this symbol means:






        Press space to continue
    ButtonComponent button
      bold = False
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (-.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which object was it?
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    ButtonComponent button_2
      bold = False
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which way was it facing?
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    ImageComponent image_17
      image = stim/ori1.png
      pos = (0, .23)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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  Routine test2
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    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Please click on the correct option





        this symbol means:






        Press space to continue
    ButtonComponent button_3
      bold = False
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (-.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which object was it?
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    ButtonComponent button_4
      bold = False
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which way was it facing?
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    ImageComponent image_18
      image = stim/obj2.png
      pos = (0, .23)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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  Routine test3
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Please click on the correct option





        this symbol means:






        Press space to continue
    ButtonComponent button_5
      bold = False
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (-.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which object was it?
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    ButtonComponent button_7
      bold = False
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which way was it facing?
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    ImageComponent image_19
      image = stim/ori2.png
      pos = (0, .23)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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  Routine test4
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Please click on the correct option





        this symbol means:






        Press space to continue
    ButtonComponent button_6
      bold = False
      forceEndRoutine = True
      letterHeight = 0.025
      pos = (-.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which object was it?
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    ButtonComponent button_8
      bold = False
      forceEndRoutine = False
      letterHeight = 0.025
      pos = (.2, -.15)
      size = (0.20, 0.15)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10000
      text = Which way was it facing?
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    ImageComponent image_20
      image = stim/obj1.png
      pos = (0, .23)
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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  Routine gratz
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Perfect!

        Please remember these symbols as you will need them for the experiment.

        They will be shown once again before the experiment starts.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine respo1
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Once you are shown the symbol and the object, you will see a group of answers on the screen






        The order of these options will be scrambled each time you see them. Your task is to select the correct one, depending on the symbol (question) and the image you just saw.

        Press space to continue
    ImageComponent image_25
      image = stim/response_instr.png
      pos = (0, .13)
      size = (0.7, 0.21)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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  Routine respo2
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    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Regardless of your answer being in the first or second row of the screen, you should only respond between 1, 2, 3, or 4.





        In this example, if your desired response is “full right", since it is the 3rd option on the row, you should press 3. Only the number of the relevant row is important.


        Press space to continue
    ImageComponent image_24
      image = stim/response_instr.png
      pos = (0, .13)
      size = (0.7, 0.21)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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  Routine respo3
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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      text:
        Similarly, if your response is "turtle", you should respond by also pressing 3, because it is the 3rd item in the correct row. You can ignore the row with the answers that are not relevant to this question.


        press space to continue
    ImageComponent image_21
      image = stim/response_instr.png
      pos = (0, .25)
      size = (0.7, 0.21)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
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  Routine accCheck
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    CodeComponent code_2
      Code Type = Both
      Begin Experiment:
        total = 0
        match = 0
      Begin JS Experiment:
        total = 0;
        match = 0;
        respAll = [resp1, resp2, resp3, resp4, resp5, resp6, resp7, resp8];
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if ((_pj.in_es6("ori1", taskCue) || _pj.in_es6("ori2", taskCue))) {
            task = "ori";
            if ((objFirst === "True")) {
                Kb.keys = (Number.parseFloat(Kb.keys) + 4).toString();
            }
            if ((stimfile.slice((- 5))[0] === "1")) {
                correct = "full left";
            } else {
                if ((stimfile.slice((- 5))[0] === "2")) {
                    correct = "slight left";
                } else {
                    if ((stimfile.slice((- 5))[0] === "3")) {
                        correct = "slight right";
                    } else {
                        if ((stimfile.slice((- 5))[0] === "4")) {
                            correct = "full right";
                        }
                    }
                }
            }
            if ((respAll[Number.parseInt((Number.parseFloat(Kb.keys) - 1))] === correct)) {
                match += 1;
            }
        }
        if ((_pj.in_es6("obj1", taskCue) || _pj.in_es6("obj2", taskCue))) {
            task = "obj";
            if ((objFirst === "False")) {
                Kb.keys = (Number.parseFloat(Kb.keys) + 4).toString();
            }
            if (_pj.in_es6(util.index(respAll, (Number.parseFloat(Kb.keys) - 1)), stimfile)) {
                match += 1;
            }
        }
        total += 1;
        if ((((match / total) > 0.8) && (total > 10))) {
            trialsfinished = true;
        }
      Begin Routine:
        respAll = [resp1, resp2, resp3, resp4, resp5, resp6, resp7, resp8]

        if kb.keys is None:
            total += 1
            accuracy = (match / total)
            continue  # Skip the current iteration and continue with the next one

        else:
            if "ori1" in taskCue or "ori2" in taskCue:
                task = 'ori'

                if objFirst == "True":
                    kb.keys = str(float(kb.keys) + 4)

                if stimfile[-5] == "1":
                    correct = "full left"
                elif stimfile[-5] == "2":
                    correct = "slight left"
                elif stimfile[-5] == "3":
                    correct = "slight right"
                elif stimfile[-5] == "4":
                    correct = "full right"

                if respAll[int(float(kb.keys) - 1)] == correct:
                    match += 1


            if "obj1" in taskCue or "obj2" in taskCue:
                task = 'obj'

                if objFirst == "False":
                    kb.keys = str(float(kb.keys) + 4)

                if respAll[int(float(kb.keys) - 1)] in stimfile:
                    match += 1


            total += 1
            accuracy = (match / total)

        if accuracy > 0.8 and total > 10:
            trials.finished = True  # Close the current loop and go to the next loop
      End Experiment:
        print("Total shown:", total)
        print("Accuracy:", accuracy)
        print("Run", block ," finished:")
    TextComponent text_18
      letterHeight = 0.05
      pos = (0, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text [set every repeat]:
        $accuracy
    TextComponent text_19
      letterHeight = 0.05
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $total
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  Routine getReady
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1000
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      text:
        You will now do a short round of training.


        Press space to start training
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine tybb
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10000
      text = End of the run, please relax for a moment.
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    KeyboardComponent key_resp_13
      allowedKeys = '9'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = all keys
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  Routine codeAcc
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    CodeComponent code_4
      Code Type = Both
      Begin Experiment:
        total = 0
        match = 0
      Begin JS Experiment:
        total = 0;
        match = 0;
        respAll = [resp1, resp2, resp3, resp4, resp5, resp6, resp7, resp8];
      Begin JS Routine:
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      Begin Routine:
        respAll = [resp1, resp2, resp3, resp4, resp5, resp6, resp7, resp8]

        if kb.keys is None:
            total += 1
            accuracy = (match / total)
            continue  # Skip the current iteration and continue with the next one

        else:
            if "ori1" in taskCue or "ori2" in taskCue:
                task = 'ori'

                if objFirst == "True":
                    kb.keys = str(float(kb.keys) + 4)

                if stimfile[-5] == "1":
                    correct = "Full Left"
                elif stimfile[-5] == "2":
                    correct = "Half Left"
                elif stimfile[-5] == "3":
                    correct = "Half Right"
                elif stimfile[-5] == "4":
                    correct = "Full Right"

                if respAll[int(float(kb.keys) - 1)] == correct:
                    match += 1


            if "obj1" in taskCue or "obj2" in taskCue:
                task = 'obj'

                if objFirst == "False":
                    kb.keys = str(float(kb.keys) + 4)

                if respAll[int(float(kb.keys) - 1)].lower() in stimfile.lower():
                    match += 1


            total += 1
            accuracy = (match / total)

        if accuracy > 0.3 and total > 3:
            break  # Close the current loop and go to the next loop
      End Experiment:
        print("Total shown:", total)
        print("Accuracy:", accuracy)
        print("Run", block ," finished:")
  Routine instructions
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  Routine instructionPrep
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    CodeComponent code_5
      Code Type = Both
      Begin Experiment:
        cur_row = 0
        button_pressed = "none"
        show_instructions = 1
        max_slides = 5
      Begin JS Experiment:
        cur_row = 0;
        button_pressed = "none";
        show_instructions = 1;
        max_slides = 5;
      Begin JS Routine:
        if ((button_pressed === "next")) {
            cur_row += 1;
        } else {
            if ((button_pressed === "back")) {
                cur_row -= 1;
            }
        }
        button_pressed = "none";
        if ((cur_row < 0)) {
            cur_row = 0;
        }
        if ((cur_row > max_slides)) {
            instructions_controller_finished = 1;
            show_instructions = 0;
        }
      Begin Routine:
        if (button_pressed == "next"):
            cur_row += 1
        elif (button_pressed == "back"):
            cur_row -= 1

        button_pressed = "none"


        if cur_row < 0:
            cur_row = 0

        if cur_row > max_slides:
            instructions_controller.finished = 1
            show_instructions = 0
            cur_row = max_slides
  Routine Instructions1
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    ImageComponent imageInstruct
      image [set every repeat] = $InstructionsFilepath
      size = (1.6, 1.00736)
      startVal [time (s)] = 0.0
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    ButtonComponent buttonNext
      bold = False
      callback = button_pressed = "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (.72,-.44)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Next >>
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    ButtonComponent buttonBack
      bold = False
      callback = button_pressed = "back"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-.72, -.44)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = << Back
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  Routine Instructions2
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    ImageComponent imageInstruct_2
      image [set every repeat] = $Instructions2Filepath
      size = (1.6, 1.00736)
      startVal [time (s)] = 0.0
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    ButtonComponent buttonNext_2
      bold = False
      callback = button_pressed = "next"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (.72,-.44)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = Next >>
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    ButtonComponent buttonBack_2
      bold = False
      callback = button_pressed = "back"
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-.72, -.44)
      size = (0.2, 0.08)
      startVal [time (s)] = 0
      text = << Back
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  Routine instruction2prep
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        cur2_row = 0
        button_pressed = "none"
        show_instructions2 = 1
        max_slides2 = 5
      Begin Routine:
        if (button_pressed == "next"):
            cur2_row += 1
        elif (button_pressed == "back"):
            cur2_row -= 1

        button_pressed = "none"


        if cur2_row < 0:
            cur2_row = 0

        if cur2_row > max_slides2:
            cur2_row = max_slides2
            instructions2_controller.finished = 1
            show_instructions2 = 0
            cur_row2 = max_slides2
  Routine trainingPrep
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        # Construct the file path using participant and session values
        numParticipant = expInfo.get('participant', '')  # Get the participant value
        numSession = expInfo.get('session', '')  # Get the session value
        trialsFilepath = f'trialMatrices/trialMatrix_s{numParticipant}_{numSession}.xlsx'

        if numSession == "0":
            trainingEnter = 1
        else:
            trainingEnter = 0
Flow
  Routine trainingPrep
  LoopInitiator trainingLoop loopType="TrialHandler"
    loopType = random
    nReps = trainingEnter
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    LoopInitiator instructions_controller loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine instructionPrep
      LoopInitiator instruction_slide_loop loopType="TrialHandler"
        Selected rows = $str(cur_row)
        conditionsFile = instructions/Instructions_doc.xlsx
        loopType = sequential
        nReps = show_instructions
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        conditions:
          [{'InstructionsFilepath': 'instructions//slide1.png'},
          {'InstructionsFilepath': 'instructions//slide2.png'},
          {'InstructionsFilepath': 'instructions//slide3.png'},
          {'InstructionsFilepath': 'instructions//slide4.png'},
          {'InstructionsFilepath': 'instructions//slide5.png'},
          {'InstructionsFilepath': 'instructions//slide6.png'}]
        Routine Instructions1
      LoopTerminator instruction_slide_loop
    LoopTerminator instructions_controller
    Routine test1
    Routine test2
    Routine test3
    Routine test4
    LoopInitiator instructions2_controller loopType="TrialHandler"
      loopType = random
      nReps = 999
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      Routine instruction2prep
      LoopInitiator instruction2_slide_loop loopType="TrialHandler"
        Selected rows = $str(cur2_row)
        conditionsFile = instructions/Instructions2_doc.xlsx
        loopType = sequential
        nReps = show_instructions2
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        conditions:
          [{'Instructions2Filepath': 'instructions//slide7.png'},
          {'Instructions2Filepath': 'instructions//slide8.png'},
          {'Instructions2Filepath': 'instructions//slide9.png'},
          {'Instructions2Filepath': 'instructions//slide10.png'},
          {'Instructions2Filepath': 'instructions//slide11.png'},
          {'Instructions2Filepath': 'instructions//slide12.png'}]
        Routine Instructions2
      LoopTerminator instruction2_slide_loop
    LoopTerminator instructions2_controller
  LoopTerminator trainingLoop
  Routine Intro
  LoopInitiator trial loopType="TrialHandler"
    conditionsFile = $trialsFilepath
    loopType = sequential
    nReps = 1
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    conditions:
      [{'category': 'shoe', 'orientation': 4, 'taskCue': 'stim//obj1.png', 'stimfile': 'stim//shoe4.png', 'resp1': 'turtle', 'resp2': 'shoe', 'resp3': 'car', 'resp4': 'horse', 'resp5': 'full left', 'resp6': 'slight right', 'resp7': 'full right', 'resp8': 'slight left', 'objFirst': 'True', 'interval': 2.581},
      {'category': 'turtle', 'orientation': 4, 'taskCue': 'stim//ori1.png', 'stimfile': 'stim//turtle4.png', 'resp1': 'full left', 'resp2': 'full right', 'resp3': 'slight left', 'resp4': 'slight right', 'resp5': 'shoe', 'resp6': 'car', 'resp7': 'horse', 'resp8': 'turtle', 'objFirst': 'False', 'interval': 2.775},
      {'category': 'horse', 'orientation': 4, 'taskCue': 'stim//obj1.png', 'stimfile': 'stim//horse4.png', 'resp1': 'full right', 'resp2': 'slight right', 'resp3': 'slight left', 'resp4': 'full left', 'resp5': 'horse', 'resp6': 'car', 'resp7': 'shoe', 'resp8': 'turtle', 'objFirst': 'False', 'interval': 2.161},
      {'category': 'turtle', 'orientation': 1, 'taskCue': 'stim//obj1.png', 'stimfile': 'stim//turtle1.png', 'resp1': 'full left', 'resp2': 'full right', 'resp3': 'slight left', 'resp4': 'slight right', 'resp5': 'shoe', 'resp6': 'turtle', 'resp7': 'horse', 'resp8': 'car', 'objFirst': 'False', 'interval': 2.629}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
    Routine taskcue
    LoopInitiator stimloop loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine stim
      Routine delay
    LoopTerminator stimloop
    Routine response
    Routine codeAcc
    Routine ITI
  LoopTerminator trial
  Routine tybb
